MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\matlab-programs\jonathan\drivers\keithley_2000.mdd
DriverType: MATLAB interface object
InstrumentType: DC Volt Meter
InstrumentManufacturer: Agilent
InstrumentModel: 34420a
InstrumentVersion: 1.1
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: :SYSTEM:error?

CreateInitCode
  Code:
    function init(obj)
    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
    obj.UserData.IntegrationStarted=0; %internal singifier, that the integration cycle has been started by invoking 'integration_start'
    obj.UserData.IntegrationUntil=Inf;

ConnectInitCode
  Code:
    function init(obj)
    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fprintf(obj.Interface,'*RST;*CLS;');
    obj.trigger_source='bus';
    obj.mode='VDC';
    obj.autozero='ON';
    obj.autorange=0;
    obj.nplc=10;

CleanupCode
  Code:
    function cleanup(obj)
    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

    obj.text=NaN;
    obj.nplc=10;
    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

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property autorange
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'TEMP','FREQ','PRE','DIODE'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              propertyValue=NaN;
              return
          end
      end

      propertyValue=query(g,sprintf(':%s:RANGe:AUTO?',m));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'TEMP','FREQ','PRE','DIODE'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              return
          end
      end

      fprintf(obj.Interface,sprintf(':%s:RANGe:AUTO %f',m,propertyValue));
    PermissibleType: Double enum [1.0, 0.0]
    DefaultValue: 1.0
    ReadOnly: never

  Property autozero
    Type: InstrumentCommand
    ConfigureCommand: SENSE:NULL
    QueryCommand: SENSE:NULL?
    PermissibleType: String enum [once=ONCE, off=OFF, on=ON]
    DefaultValue: once
    ReadOnly: never

  Property filter_count
    Type: InstrumentCommand
    ConfigureCommand: SAMPLE:COUNt
    QueryCommand: SAMPLE:COUNt?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: These commands are used to specify the filter count. In general, the filter
      count is the number of readings that are acquired and stored in the filter
      buffer for the averaging calculation. The larger the filter count, the more
      filtering that is performed.

  Property integration_done
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      %check wether the integration-timer started by 'integration_start' has run out.

      t=now;

      if obj.UserData.IntegrationStarted==0 || obj.UserData.IntegrationUntil < t
          propertyValue=1;
      else
          propertyValue=0;
      end
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: check if operation is complete, i.e. integration is done

      if value if '1', then the integration is done and data is available

      this property exists mostly due to generalization.

  Property mode
    Type: InstrumentCommand
    ConfigureCommand: :FUNC
    QueryCommand: :FUNC?
    PermissibleType: String enum [VDC="VOLT", R="RES", R4t="FRES", TEMP="TEMP"]
    DefaultValue: VDC
    ReadOnly: never
    Description: mode as in: "what does it measure"

  Property nplc
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface;

      propertyValue=query(g,sprintf(':%s:NPLC?',obj.plainMode));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;

      fprintf(obj.Interface,sprintf(':%s:NPLC %f',obj.plainMode,propertyValue));
    PermissibleType: Double enum [0.02, 0.2, 1.0, 2.0, 10.0, 20.0, 100.0, 200.0]
    DefaultValue: 10
    ReadOnly: never
    Description: integration-time in number of power line-cycles

      The number of available digits depends on this setting!

      nplc	#digits,digital filter off	#digits,dig. filter on
      0.02	4.5	5.5
      0.2	5.5	6.5
      1	6.5	7.5
      2	6.5	7.5
      >=20	7.5	7.5

  Property plainMode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      % get mode in nomenclature of instrument rather than the generalized
      % notation
      g=obj.Interface;
      m=query(g,':FUNC?');
      propertyValue=m(2:end-2); %remove quotation marks
    SetMCode:
      function set(obj, propertyName, propertyValue)
      % readonly
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: mode as known to the instument interaly (read-only)

  Property range
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'TEMP','FREQ','PRE','DIODE'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              propertyValue=NaN;
              return
          end
      end

      propertyValue=query(g,sprintf(':%s:RANGe?',m));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'TEMP','FREQ','PRE','DIODE'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              return
          end
      end

      fprintf(obj.Interface,sprintf(':%s:RANGe %f',m,propertyValue));
    PermissibleType: Double none
    DefaultValue: 1
    ReadOnly: never
    Description: range of the instrument

  Property text
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface
      t=query(g,':DISP:TEXT:DATA?');
      propertyValue=t(2:end-2); %remove " ... "
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;

      if numel(propertyValue) > 12
          propertyValue=propertyValue(1:12);
      end

      if isnan(propertyValue)
          fprintf(g,':DISP:TEXT:CLEar');
      else
          fprintf(g,sprintf(':DISP:TEXT:DATA "%s"',propertyValue));
      end
    PermissibleType: String none
    PermissibleType: Double none
    ReadOnly: never

  Property trigger_source
    Type: InstrumentCommand
    ConfigureCommand: trig:sour
    QueryCommand: trig:sour?
    PermissibleType: String enum [bus=bus, immediate=imm, external=ext]
    DefaultValue: bus
    ReadOnly: never

  Method getX
    MCode:
      function result=getX(obj)
      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
      if ~obj.UserData.IntegrationStarted %internal singifier, that the integration cycle has been started by invoking 'integration_start'
          %if integration hasnt started yet, do so:
          invoke(obj,'integration_start');
      end

      while ~obj.integration_done
          pause(0.01);
          %do nothing, just wait and see ;)
      end
      fprintf(obj.Interface,'fetc?');
      result=fscanf(obj.Interface,'%e');
      if result==9.9E37 %this means overflow
          result=NaN;
      end

      obj.UserData.IntegrationStarted=0; %internal singifier, that the integration cycle is done.
    Description: use as follows:

      invoke(obj,'integration_start');
      while(~obj.ingetration_done)
      	%do whatever you so desire in the meantime
      end
      reading=invoke(obj,'getX'); %finally read data

  Method getXY
    MCode:
      function r=getXY(obj)
      %this function exists to provide better interchangebility between LockIn
      %and DC-Measurements. As we are only reading DC there is no imaginary part
      %and we can just return 'getX'
      r=invoke(obj,'getX');

  Method integration_start
    MCode:
      function integration_start(obj)
      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

      %the 34420a trigger system unfortunately does not suppoert querying of the
      %current statur (i.e. idle or waiting for trigger ..) so we just have to
      %make do with the READ?-command and wait for the instrument to answer to
      %ensure we have a new reading. (FETC? could return the same value multiple
      %times).
      % In order to still execute other code while taking a reading the send and
      % the reciving of the READ? -command are split into two functions.
      % integration_start sends the read command and sets atimer value, for when
      % the reading should be available, then the data is read by getX

      %!!!!!!!!!!!!one drawback of this solution is, that nothing alse must be queried
      %inbetween integration_start and getX!!!!!!!!!

      %!!!^^^^^^this comment might be obsolete (see comment below concerning READ?)

      nplc=obj.nplc; %have to read this before, in order no to interfer with the result of 'READ?';

      %fprintf(obj.Interface,'READ?');  %this used to work, however the instrument decided not to like it anymore ... whatever!
      fprintf(obj.Interface,':init;*trg');

      obj.UserData.IntegrationStarted=1;%internal singifier, that the integration cycle has been invoked by this method.

      a=now;
      s=1.1597e-05; %if two values of 'now' differ by this value, the time difference is reasonably close to 1second
      plc=1/50; % duration of 1 power line cycle in seconds, as we are in Europe, this is 1/50th

      obj.UserData.IntegrationUntil = a +  s*plc*nplc;
    Description: signify the start of an integration. (i.e. data aquisition, once the integration is done the property integration_done will be '1')

      this essentially triggers the instrument. It also relies on trigger_continuos to be '1'.


      This functionality has been added to enhance portablility between different instruments (Lock-In amplifiers and multimeters, for interchangable ac and dc measurements)

Group channel
  Size: 2
  Mappings
    ChannelMap Command="2" Index="2"
    ChannelMap Command="1" Index="1"

  Property autozero
    Type: InstrumentCommand
    ConfigureCommand: SENSe<ID>:VOLTage:NULL
    QueryCommand: SENSe<ID>:VOLTage:NULL?
    PermissibleType: String enum [on=ON, off=OFF]
    DefaultValue: on
    ReadOnly: never

  Property nplc
    Type: InstrumentCommand
    ConfigureCommand: SENSe<ID>:VOLTage:NPLC
    QueryCommand: SENSe<ID>:VOLTage:NPLC?
    PermissibleType: Double enum [0.02, 0.2, 1.0, 2.0, 10.0, 20.0, 100.0, 200.0]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0.02
    ReadOnly: never

  Property range
    Type: InstrumentCommand
    ConfigureCommand: SENSe<ID>:VOLTage:RANGe
    QueryCommand: SENSe<ID>:VOLTage:RANGe?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property resolution
    Type: InstrumentCommand
    ConfigureCommand: SENSe<ID>:VOLTage:RESolution
    QueryCommand: SENSe<ID>:VOLTage:RESolution?
    PermissibleType: Double none
    PermissibleType: String enum [max=MAX, min=MIN]
    DefaultValue: 0
    ReadOnly: never

  Method getX
    Type: InstrumentCommand
    Line Command="ROUTe:TERMinals FRONt<ID>" Output="false"
    Line Command=":init;*trg;fetc?" Format="numeric" Output="true" ReadOutputAs="ASCII"

  Method select
    Type: InstrumentCommand
    Line Command="ROUTe:TERMinals FRONt<ID>" Output="false"
