MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\Matlab Programs\jb-suite\drivers\agilent_54621a.mdd
DriverType: MATLAB interface object
InstrumentType: Oscilloscope
InstrumentManufacturer: Agilent
InstrumentModel: 54621a
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
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
ConnectInitCode
  Type: InstrumentCommand

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

Group timebase
  Size: 1
  Mappings ChannelMap Command="Timebase1" Index="1"

  Property mode
    Type: InstrumentCommand
    ConfigureCommand: :TIMebase:Mode
    QueryCommand: :TIMebase:Mode?
    PermissibleType: String enum [main=MAIN, window=WINDow, xy=XY, roll=ROLL]
    DefaultValue: main
    ReadOnly: never

  Property position
    Type: InstrumentCommand
    ConfigureCommand: :TIMebase:POSition
    QueryCommand: :TIMebase:POSition?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property range
    Type: InstrumentCommand
    ConfigureCommand: :TIMebase:RANGe
    QueryCommand: :TIMebase:RANGe?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property reference
    Type: InstrumentCommand
    ConfigureCommand: :TIMebase:REFerence
    QueryCommand: :TIMebase:REFerence?
    PermissibleType: String enum [left=LEFT, center=CENTer, right=RIGHt]
    DefaultValue: left
    ReadOnly: never

  Property scale
    Type: InstrumentCommand
    ConfigureCommand: :TIMebase:SCALe
    QueryCommand: :TIMebase:SCALe?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property window_position
    Type: InstrumentCommand
    ConfigureCommand: :TIMebase:WINDow:POSition
    QueryCommand: :TIMebase:WINDow:POSition?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property window_range
    Type: InstrumentCommand
    ConfigureCommand: :TIMebase:WINDow:RANGe
    QueryCommand: :TIMebase:WINDow:RANGe?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property window_scale
    Type: InstrumentCommand
    ConfigureCommand: :TIMebase:WINDow:SCALe
    QueryCommand: :TIMebase:WINDow:SCALe?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

Group trigger
  Size: 1
  Mappings ChannelMap Command="trigger1" Index="1"

  Property coupling
    Type: InstrumentCommand
    ConfigureCommand: :TRIGger:COUPling
    QueryCommand: :TRIGger:COUPling?
    PermissibleType: String enum [ac=AC, dc=DC, lf_reject=LFR]
    DefaultValue: ac
    ReadOnly: never

  Property level
    Type: InstrumentCommand
    ConfigureCommand: :TRIGger:LEVel
    QueryCommand: :TRIGger:LEVel?
    PermissibleType: Double none
    ReadOnly: never

  Property reject
    Type: InstrumentCommand
    ConfigureCommand: :TRIGger:REJect
    QueryCommand: :TRIGger:REJect?
    PermissibleType: String enum [off=OFF, lf=LFR, hf=HFR]
    DefaultValue: off
    ReadOnly: never

  Property slope
    Type: InstrumentCommand
    ConfigureCommand: :TRIGger:SLOPe
    QueryCommand: :TRIGger:SLOPe?
    PermissibleType: String enum [positive=POS, negative=NEG]
    DefaultValue: positive
    ReadOnly: never
