MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\Users\jonathan.becker\Dropbox\wsi-backup\transport\software\jb-suite\drivers\egng_7265.mdd
DriverType: MATLAB interface object
InstrumentType: Lock-In Amplifier
InstrumentManufacturer: EG&G
InstrumentModel: 7260,7265
InstrumentVersion: 1.0
Identify: ID
Reset: ADF 1

CreateInitCode
  Code:
    function init(obj)
    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

    obj.UserData.IntegrationUntil=Inf; %internal singifier, when the integration cycle started by invoking 'integration_start' is over (compare this value to 'now')

ConnectInitCode
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
CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property bandwidth
    Type: InstrumentCommand
    QueryCommand: ENBW.?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Equivalent noise bandwidth In fixed point mode, reports the equivalent noise bandwidth of the output low-pass filters at the current time constant setting in microhertz. In floating point mode, reports the equivalent noise bandwidth of the output low-pass filters at the current time constant setting in hertz.

      NOTE: This command is not available when the reference frequency exceeds 60 kHz.

  Property current_noise
    Type: InstrumentCommand
    QueryCommand: NHZ.
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Causes the lock-in amplifier to respond with the square root of the noise spectral
      density measured at the Y channel output, expressed in volt/√Hz or amps/√Hz referred
      to the input. This measurement assumes that the Y channel output is Gaussian with
      zero mean. (Section 3.3.16). The command is only available in floating point mode.
      NOTE: This command is not available when the reference frequency exceeds
      60 kHz.

  Property filt_slope
    Type: InstrumentCommand
    ConfigureCommand: SLOPE
    QueryCommand: SLOPE?
    PermissibleType: String enum [6db/octace=0, 12db/octace=1, 18db/octace=2, 24db/octace=3]
    DefaultValue: 6db/octace
    ReadOnly: never

  Property filt_syncTC
    Type: InstrumentCommand
    ConfigureCommand: SYNC
    QueryCommand: SYNC?
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never
    Description: Synchronous time constant control
      At reference frequencies below 10 Hz, if the synchronous time constant is enabled,
      then the actual time constant of the output filters is not generally the selected value T
      but rather a value equal to an integer number of reference cycles. If T is greater than 1
      cycle, the time constant is between T/2 and T. The parameter n has the following
      significance:
      n Effect
      0 Synchronous time constant disabled
      1 Synchronous time constant enabled

  Property integration_done
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      %check wether the integration-timer started by 'integration_start' has run out.

      t=now;

      if obj.UserData.IntegrationUntil < t
          propertyValue=1;
      else
          propertyValue=0;
      end
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property mode
    Type: InstrumentCommand
    ConfigureCommand: RANGE
    QueryCommand: RANGE?
    PermissibleType: String enum [Signal Recovery=0, Vector Voltmeter=1]
    DefaultValue: Signal Recovery
    ReadOnly: never
    Description: Signal Recovery/Vector Voltmeter mode selector
      The value of n sets the operating mode of the instrument as follows:
      n Mode
      0 Signal Recovery
      1 Vector Voltmeter

  Property osc_amplitude
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue=query(obj.Interface,'OA.?');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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g=obj.Interface;
      fprintf(g,sprintf('OA. %1.6E',propertyValue));
    PermissibleType: Double bounded [Max="5.0" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never

  Property osc_freq
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue=query(obj.Interface,'OF.?');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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g=obj.Interface;
      fprintf(g,sprintf('OF. %1.8E',propertyValue));
    PermissibleType: Double bounded [Max="250000.0" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never

  Property range
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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g=obj.Interface;
      n=query(g,'SEN?');
      im=obj.sig_imode;

      names.('low_noise')      = {'n\a', 'n\a', 'n\a',  'n\a',  'n\a',  'n\a',   '2fA',   '5fA',   '10fA', '20fA', '50fA', '100fA', '200fA', '500fA', '1pA',   '2pA',   '5pA',   '10pA','20pA','50pA','100pA','200pA','500pA','1nA',   '2nA',   '5nA',   '10nA' };
      names.('high_bandwidth') = {'2fA', '5fA', '10fA', '20fA', '50fA', '100fA', '200fA', '500fA', '1pA',  '2pA',  '5pA',  '10pA',  '20pA',  '50pA',  '100pA', '200pA', '500pA', '1nA', '2nA', '5nA', '10nA', '20nA', '50nA', '100nA', '200nA', '500nA', '1uA'  };
      names.('off')            = {'2nV', '5nV', '10nV', '20nV', '50nV', '100nV', '200nV', '500nV', '1uV',  '2uV',  '5uV',  '10uV',  '20uV',  '50uV',  '100uV', '200uV', '500uV', '1mV', '2mV', '5mV', '10mV', '20mV', '50mV', '100mV', '200mV', '500mV', '1V'   };

      propertyValue=names.(im){str2num(n)};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      % set range, possible inputs are: string with range or numeric (next
      % greater range will be selected)

      im=obj.sig_imode;

      names.('low_noise')      = {'n\a', 'n\a', 'n\a',  'n\a',  'n\a',  'n\a',   '2fA',   '5fA',   '10fA', '20fA', '50fA', '100fA', '200fA', '500fA', '1pA',   '2pA',   '5pA',   '10pA','20pA','50pA','100pA','200pA','500pA','1nA',   '2nA',   '5nA',   '10nA' };
      names.('high_bandwidth') = {'2fA', '5fA', '10fA', '20fA', '50fA', '100fA', '200fA', '500fA', '1pA',  '2pA',  '5pA',  '10pA',  '20pA',  '50pA',  '100pA', '200pA', '500pA', '1nA', '2nA', '5nA', '10nA', '20nA', '50nA', '100nA', '200nA', '500nA', '1uA'  };
      names.('off')            = {'2nV', '5nV', '10nV', '20nV', '50nV', '100nV', '200nV', '500nV', '1uV',  '2uV',  '5uV',  '10uV',  '20uV',  '50uV',  '100uV', '200uV', '500uV', '1mV', '2mV', '5mV', '10mV', '20mV', '50mV', '100mV', '200mV', '500mV', '1V'   };

      numeric.('low_noise')      = [NaN,   NaN,   NaN,    NaN,    NaN,    NaN,     2E-15,   5E-15,   10E-15, 20E-15, 50E-15, 100E-15, 200E-15, 500E-15, 1E-12,   2E-12,   5E-12,   10E-12, 20E-12, 50E-12, 100E-12, 200E-12, 500E-12, 1E-9,   2E-9,   5E-9,   10E-9 ];
      numeric.('high_bandwidth') = [2E-15, 5E-15, 10E-15, 20E-15, 50E-15, 100E-15, 200E-15, 500E-15, 1E-12,  2E-12,  5E-12,  10E-12,  20E-12,  50E-12,  100E-12, 200E-12, 500E-12, 1E-9,   2E-9,   5E-9,   10E-9,   20E-9,   50E-9,   100E-9, 200E-9, 500E-9, 1E-6  ];
      numeric.('off')            = [2E-9,  5E-9,  10E-9,  20E-9,  50E-9,  100E-9,  200E-9,  500E-9,  1E-6,   2E-6,   5E-6,   10E-6,   20E-6,   50E-6,   100E-6,  200E-6,  500E-6,  1E-3,   2E-3,   5E-3,   10E-3,   20E-3,   50E-3,   100E-3, 200E-3, 500E-3, 1     ];

      names  = names.(im);
      numeric= numeric.(im);

      if(isnumeric(propertyValue))
          ind=find(numeric >= abs(propertyValue),1);
      else
          ind=find(ismember(names,propertyValue));
      end

      if not(isempty(ind))
          g=obj.Interface;
          fprintf(g,sprintf('SEN %d',ind));
      else
          error('requested invalid range. Possible ranges are: %s, (%d to %d)',sprintf('%s ',names{:}),numeric(1),numeric(end));
      end
    PermissibleType: String none
    PermissibleType: Double none
    ReadOnly: never

  Property range_numeric
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue=query(obj.Interface,'SEN.?');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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g=obj.Interface;
      fprintf(g,sprintf('SEN %E',propertyValue));
    PermissibleType: Double bounded [Max="27.0" Min="1.0"]
    DefaultValue: 1.0
    ReadOnly: never

  Property ref_freq_meter
    Type: InstrumentCommand
    QueryCommand: FRQ?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property ref_harmonic
    Type: InstrumentCommand
    ConfigureCommand: REFN
    QueryCommand: REFN?
    PermissibleType: Double bounded [Max="65535.0" Min="1.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Reference harmonic mode control
      The value of n sets the reference channel to one of the NF modes, or restores it to the
      default 1F mode. The value of n is in the range 1 to 65535.

  Property ref_input
    Type: InstrumentCommand
    ConfigureCommand: IE
    QueryCommand: IE?
    PermissibleType: String enum [internal=0, rear (external)=1, front (external)=2]
    DefaultValue: internal
    ReadOnly: never

  Property ref_mode
    Type: InstrumentCommand
    ConfigureCommand: REFMODE
    QueryCommand: REFMODE?
    PermissibleType: String enum [Single Reference / Virtual Reference=0, Dual Harmonic=1, Dual Reference=2]
    DefaultValue: Single Reference / Virtual Reference
    ReadOnly: never

  Property ref_phase
    Type: InstrumentCommand
    ConfigureCommand: REFP
    QueryCommand: REFP?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property sig_acgain
    Type: InstrumentCommand
    ConfigureCommand: ACGAIN
    QueryCommand: ACGAIN?
    PermissibleType: Double enum [0.0, 1.0, 2.0, 3.0, 4.0, 5.0, 6.0, 7.0, 8.0, 9.0]
    DefaultValue: 0.0
    ReadOnly: never
    Description: AC Gain control
      Sets the gain of the signal channel amplifier. Values of n from 0 to 9 can be entered,
      corresponding to the range 0 dB to 90 dB in 10 dB steps.

  Property sig_acgain_auto
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue=str2num(query(obj.Interface,'AUTOMATIC?'));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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if propertyValue
          fprintf(obj.Interface,'AUTOMATIC 1');
      else
          fprintf(obj.Interface,'AUTOMATIC 0');
      end
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0.0
    ReadOnly: never
    Description: 0 AC Gain is under manual control, either using the front panel or the ACGAIN
      command
      1 Automatic AC Gain control is activated, with the gain being adjusted according to
      the full-scale sensitivity setting

  Property sig_coupling
    Type: InstrumentCommand
    ConfigureCommand: CP
    QueryCommand: CP?
    PermissibleType: String enum [AC=0, DC=1]
    DefaultValue: AC
    ReadOnly: never
    Description: Input connector coupling mode control
      The value of n sets the input coupling mode according to the following table:
      n Coupling mode
      0 AC
      1 DC

  Property sig_fet
    Type: InstrumentCommand
    ConfigureCommand: FET
    QueryCommand: FET?
    PermissibleType: String enum [fet=1, bipolar=0]
    DefaultValue: fet
    ReadOnly: never
    Description: Voltage mode input device control
      The value of n selects the input device according to the following table:
      n Selection
      0 Bipolar device, 10 kΩ input impedance, 2 nV/√Hz voltage noise at 1 kHz
      1 FET, 10 MΩ input impedance, 5 nV/√Hz voltage noise at 1 kHz

  Property sig_float
    Type: InstrumentCommand
    ConfigureCommand: FLOAT
    QueryCommand: FLOAT?
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0.0
    ReadOnly: never
    Description: Input connector shield float/ground control
      The value of n sets the input connector shield switch according to the following table:
      n Selection
      0 Ground
      1 Float (connected to ground via a 1 kΩ resistor)

  Property sig_imode
    Type: InstrumentCommand
    ConfigureCommand: IMODE
    QueryCommand: IMODE?
    PermissibleType: String enum [off=0, high_bandwidth=1, low_noise=2]
    DefaultValue: off
    ReadOnly: never
    Description: IMODE [n] Current/Voltage mode input selector
      The value of n sets the input mode according to the following table:
      n Input mode
      0 Current mode off - voltage mode input enabled
      1 High bandwidth (HB) current mode enabled - connect signal to B input connector
      2 Low noise (LN) current mode enabled - connect signal to B input connector
      If n = 0 then the input configuration is determined by the VMODE command.
      If n > 0 then current mode is enabled irrespective of the VMODE setting

  Property sig_linefilter
    Type: InstrumentCommand
    ConfigureCommand: LF
    QueryCommand: LF?
    PermissibleType: String enum [50Hz=1, 100Hz=2, 50Hz+100Hz=3, off=0]
    DefaultValue: 50Hz
    ReadOnly: never

  Property sig_mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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if strcmp(obj.sig_imode,'off')
          propertyValue=obj.sig_vmode;
      else
          switch obj.sig_imode
              case 'low_noise'
                  propertyValue='I_lowNoise';
              case 'high_bandwidth'
                  propertyValue='I_highBW';
          end
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      switch propertyValue
          case 'I_lowNoise'
              obj.sig_imode='low_noise';
          case 'I_highBW'
              obj.sig_imode='high_bandwidth';
          case 'A'
              obj.sig_imode='off';
              obj.sig_vmode='A';
          case '-B'
              obj.sig_imode='off';
              obj.sig_vmode='-B';
          case 'A-B'
              obj.sig_imode='off';
              obj.sig_vmode='A-B';
      end
    PermissibleType: String enum [I_lowNoise=I_lowNoise, I_highBW=I_highBW, A=A, A-B=A-B, -B=-B]
    DefaultValue: I_lowNoise
    ReadOnly: never

  Property sig_sample_rate
    Type: InstrumentCommand
    ConfigureCommand: SAMPLE
    QueryCommand: SAMPLE?
    PermissibleType: Double enum [0.0, 1.0, 2.0]
    DefaultValue: 0.0
    ReadOnly: never
    Description: Main analog-to-digital converter sample rate control
      The sampling rate of the main analog-to-digital converter, which is nominally
      166 kHz, may be adjusted from this value to avoid problems caused by the aliasing of
      interfering signals into the output passband.
      n may be set to 0, 1 or 2, corresponding to three different sampling rates (not
      specified) near 166 kHz.

  Property sig_vmode
    Type: InstrumentCommand
    ConfigureCommand: VMODE
    QueryCommand: VMODE?
    PermissibleType: String enum [test=0, A=1, -B=2, A-B=3]
    DefaultValue: test
    ReadOnly: never
    Description: VMODE [n] Voltage input configuration
      The value of n sets up the input configuration according to the following table:
      n Input configuration
      0 Both inputs grounded (test mode)
      1 A input only
      2 -B input only
      3 A-B differential mode
      Note that the IMODE command takes precedence over the VMODE command.

  Property timeconstant
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      times=[ 10E-6 20E-6 40E-6 80E-6 160E-6 320E-6 640E-6 5E-3 10E-3 20E-3 50E-3 100E-3 200E-3 500E-3 1 2 5 10 20 50 100 200 500 1E3 2E3 5E2 10E3 20E3 50E3 100E3];

      g=obj.Interface;
      n=query(g,'TC?');
      propertyValue=times(str2num(n)+1);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      times=[ 10E-6 20E-6 40E-6 80E-6 160E-6 320E-6 640E-6 5E-3 10E-3 20E-3 50E-3 100E-3 200E-3 500E-3 1 2 5 10 20 50 100 200 500 1E3 2E3 5E2 10E3 20E3 50E3 100E3];

      [idx idx]=min(abs(times-propertyValue));

      g=obj.Interface;
      fprintf(g,sprintf('TC %d',idx-1));
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: sets timeconstant to the nearest value

  Method autophase
    Type: InstrumentCommand
    Line Command="AQN" Output="false"
    Description: Auto-Phase (auto quadrature null)
      The instrument adjusts the reference phase to maximize the X channel output and
      minimize the Y channel output signals.

  Method autorange
    Type: InstrumentCommand
    Line Command="AS" Output="false"
    Description: Perform an Auto-Sensitivity operation
      The instrument adjusts its full-scale sensitivity so that the magnitude output lies
      between 30% and 90% of full-scale.

  Method getosc_amplitude
    MCode:
      function propertyValue = getosc_amplitude(obj)

      if obj.UserData.IntegrationUntil == Inf %if integration-timer is not yet running start it
          invoke(obj,'integration_start');
      end

      %wait until integration time is passed
      s=1.1597e-05; %if two values of 'now' differ by this value, the time difference is reasonably close to 1second
      t=now;
      pause((obj.UserData.IntegrationUntil - t)/s);

      g=obj.Interface;
      reading=query(g,'OA.?');

      reading = str2double(reading);
      propertyValue=reading;

      %reset timer
      obj.UserData.IntegrationUntil=Inf;

  Method getX
    MCode:
      function propertyValue = getX(obj)

      if obj.UserData.IntegrationUntil == Inf %if integration-timer is not yet running start it
          invoke(obj,'integration_start');
      end

      %wait until integration time is passed
      s=1.1597e-05; %if two values of 'now' differ by this value, the time difference is reasonably close to 1second
      t=now;
      pause((obj.UserData.IntegrationUntil - t)/s);

      g=obj.Interface;
      reading=query(g,'X.?');

      reading = str2double(reading);
      propertyValue=reading;

      %reset timer
      obj.UserData.IntegrationUntil=Inf;

  Method getXY
    MCode:
      function propertyValue = getXY(obj)

      if obj.UserData.IntegrationUntil == Inf %if integration-timer is not yet running, start it
          invoke(obj,'integration_start');
      end

      %wait until integration time is passed
      s=1.1597e-05; %if two values of 'now' differ by this value, the time difference is reasonably close to 1second
      t=now;
      pause((obj.UserData.IntegrationUntil - t)/s);

      g=obj.Interface;
      reading=query(g,'XY.?');

      reading = regexp(reading, ',', 'split');
      reading = str2double(reading);
      if numel(reading) ==1
          propertyValue=reading(1);
      else
          propertyValue = reading(1)+1i*reading(2);
      end

      %reset timer
      obj.UserData.IntegrationUntil=Inf;

  Method getY
    MCode:
      function propertyValue = getY(obj)

      if obj.UserData.IntegrationUntil == Inf %if integration-timer is not yet running start it
          invoke(obj,'integration_start');
      end

      %wait until integration time is passed
      s=1.1597e-05; %if two values of 'now' differ by this value, the time difference is reasonably close to 1second
      t=now;
      pause((obj.UserData.IntegrationUntil - t)/s);

      g=obj.Interface;
      reading=query(g,'Y.?');

      reading = str2double(reading);
      propertyValue=reading;

      %reset timer
      obj.UserData.IntegrationUntil=Inf;

  Method integration_start
    MCode:
      function integration_start(obj,varargin)
      % start the integration timer, nTC: #of timeconstants to wait, default: 5

      if nargin < 2
          nTC=5;
      else
          nTC=varargin{1};
      end

      a=now;
      s=1.1597e-05; %if two values of 'now' differ by this value, the time difference is reasonably close to 1second

      obj.UserData.IntegrationUntil = a +  s*nTC*obj.timeconstant;
