<?xml version="1.0" encoding="utf-8"?>
<MATLABInstrumentDriver>
   <FileVersion>2.42</FileVersion>
   <DriverName>T:\Documentation-LabN101\Software\MATLAB\jb-suite\drivers\generic_current-preamp.mdd</DriverName>
   <DriverType>MATLAB generic</DriverType>
   <InstrumentType>Current Preamplifier</InstrumentType>
   <InstrumentManufacturer>generic</InstrumentManufacturer>
   <InstrumentModel>all</InstrumentModel>
   <InstrumentVersion>1.0</InstrumentVersion>
   <Identify/>
   <Reset/>
   <Selftest/>
   <Error/>
   <CreateInitCode>
      <Code>function init(obj)
% This function is called after the object is created.
% OBJ is the device object.
% End of function definition - DO NOT EDIT
obj.UserData.gain=1E-6;</Code>
   </CreateInitCode>
   <ConnectInitCode>
      <Type>MCode</Type>
      <Code>function init(obj)
% This function is called after the object is connected.
% OBJ is the device object.
% End of function definition - DO NOT EDIT
</Code>
   </ConnectInitCode>
   <CleanupCode>
      <Type>MCode</Type>
      <Code>function cleanup(obj)
% This function is called before the object is disconnected.
% OBJ is the device object.
% End of function definition - DO NOT EDIT
</Code>
   </CleanupCode>
   <GroupInfo>
      <Group>
         <Name>parent</Name>
         <Description/>
         <Command/>
         <Size>1</Size>
         <Mappings>
            <ChannelMap Command="parent1" Index="1"/>
         </Mappings>
         <PropertyInfo>
            <Property>
               <Name>gain</Name>
               <Location>parent</Location>
               <CapabilityGroup>Base</CapabilityGroup>
               <Type>MCode</Type>
               <Code>
                  <GetMCode>function propertyValue = getProperty(obj, propertyName)
% Return a property value.
%   This function is called to return the device or group object property
%   value. If the property is a group property, OBJ is the group object. If
%   the property is a base device property, OBJ is the device object.
propertyValue=obj.UserData.gain;</GetMCode>
                  <SetMCode>function set(obj, propertyName, propertyValue)
% Set a property value.
%   This function is called to set the device or group object property
%   value. If the property is a group property, OBJ is the group object. If
%   the property is a base device property, OBJ is the device object.
obj.UserData.gain=propertyValue;</SetMCode>
               </Code>
               <PermissibleType>
                  <Type>Double</Type>
                  <Constraint>none</Constraint>
               </PermissibleType>
               <DefaultValue>0</DefaultValue>
               <ReadOnly>never</ReadOnly>
               <Description>gain in A/V</Description>
            </Property>
         </PropertyInfo>
         <MethodInfo>
            <Method>
               <Name>transfer</Name>
               <Location>parent</Location>
               <CapabilityGroup>Base</CapabilityGroup>
               <Type>MCode</Type>
               <Code>
                  <MCode>function out=transfer(obj,input)
% For group functions, OBJ is the group object. For
% base device functions, OBJ is the device object.
out=obj.gain*input;
</MCode>
               </Code>
               <Description/>
            </Method>
         </MethodInfo>
      </Group>
   </GroupInfo>
</MATLABInstrumentDriver>