MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\matlab-programs\jb-suite\drivers\hp_4142b.mdd
DriverType: MATLAB interface object
InstrumentType: SMU
InstrumentManufacturer: HP
InstrumentModel: 4142B
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST

CreateInitCode
  Code:
    function init(obj)
    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obj.Interface.InputBufferSize=50000;
    obj.UserData.ChannelEnabled=[0 0 0 0 0 0 0 0];
    obj.UserData.limit_V=[1 1 1 1 1 1 1 1]*100e-6;
    obj.UserData.limit_I=[1 1 1 1 1 1 1 1]*1e-6;
    obj.UserData.mode=[0 0 0 0 0 0 0 0];
    obj.UserData.value=[NaN NaN NaN NaN NaN NaN NaN NaN];

ConnectInitCode
  Code:
    function init(obj)
    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obj.Interface.EOSCharCode='LF';
    obj.Interface.EOSMode='read&write';

CleanupCode
  Type: InstrumentCommand
  Code:
    CL\n

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

Group channel
  Size: 8
  Mappings
    ChannelMap Command="channel8" Index="8"
    ChannelMap Command="channel7" Index="7"
    ChannelMap Command="channel6" Index="6"
    ChannelMap Command="channel5" Index="5"
    ChannelMap Command="channel4" Index="4"
    ChannelMap Command="channel3" Index="3"
    ChannelMap Command="channel2" Index="2"
    ChannelMap Command="channel1" Index="1"

  Property limit_I
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue=obj.Parent.UserData.limit_I(obj.HwIndex);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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obj.Parent.UserData.limit_I(obj.HwIndex)=propertyValue;
      invoke(obj,'setOutput');
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property limit_V
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue=obj.Parent.UserData.limit_V(obj.HwIndex);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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obj.Parent.UserData.limit_V(obj.HwIndex)=propertyValue;
      invoke(obj,'setOutput');
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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if obj.Parent.UserData.mode(obj.HwIndex)==0
          propertyValue='CV';
      elseif obj.Parent.UserData.mode(obj.HwIndex)==1
          propertyValue='CC';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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if strcmp(propertyValue,'CC')
          obj.Parent.UserData.mode(obj.HwIndex)=1;
      elseif strcmp(propertyValue,'CV')
          obj.Parent.UserData.mode(obj.HwIndex)=0;
      end
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never

  Property output_enable
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue=obj.Parent.UserData.ChannelEnabled(obj.HwIndex);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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I=obj.Parent.Interface;

      if propertyValue==1
          fprintf(I,sprintf('CN%i',obj.HwIndex));
          obj.Parent.UserData.ChannelEnabled(obj.HwIndex)=1;
      elseif propertyValue==0
          fprintf(I,sprintf('CL%i',obj.HwIndex));
          obj.Parent.UserData.ChannelEnabled(obj.HwIndex)=0;
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property value
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue=obj.Parent.UserData.value(obj.HwIndex);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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obj.Parent.UserData.value(obj.HwIndex)=propertyValue;

      invoke(obj,'setOutput');
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method setOutput
    MCode:
      function setOutput(obj)
      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I=obj.Parent.Interface;

      if ~isnan(obj.value)
          if strcmp(obj.mode,'CV')
              if isnan(obj.limit_I)
                  cmd=sprintf('DV%i,0,%2.5e',obj.HwIndex,obj.value);
              else
                  cmd=sprintf('DV%i,0,%2.5e,%2.5e',obj.HwIndex,obj.value,obj.limit_I);
              end
              fprintf(I,cmd);
          elseif strcmp(obj.mode,'CC')
              if isnan(obj.limit_V)
                  cmd=sprintf('DI%i,0,%2.5e',obj.HwIndex,obj.value);
              else
                  cmd=sprintf('DI%i,0,%2.5e,%2.5e',obj.HwIndex,obj.value,obj.limit_V);
              end
              fprintf(I,cmd);
          end
      end

  Method spotMeasureI
    MCode:
      function varargout=spotMeasureI(obj,voltage,compliance)
      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I=obj.Parent.Interface;

      nout = max(nargout,1);

      if strcmp(obj.mode,'CV')
          if nargin > 1
              obj.value=voltage;
          end
          if nargin > 2
              obj.limit_I=compliance;
          end
          a=query(I,sprintf('MM1,%i;XE\n',obj.HwIndex));
          if(a(1)=='C') %measurement status 'C' indicated that compliance was reached
              hit_compliance=1;
          else
              hit_compliance=0;
          end
          I_meas=sscanf(a(4:end),'%e');

      end

      varargout{1}=I_meas;
      if nout==2
          varargout{2}=hit_compliance;
      end

  Method spotMeasureV
    MCode:
      function varargout=spotMeasureV(obj,voltage,compliance)
      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I=obj.Parent.Interface;

      nout = max(nargout,1);

      if strcmp(obj.mode,'CC')
          if nargin > 1
              obj.value=voltage;
          end
          if nargin > 2
              obj.limit_I=compliance;
          end
          a=query(I,sprintf('MM1,%i;XE\n',obj.HwIndex));
          if(a(1)=='C') %measurement status 'C' indicated that compliance was reached
              hit_compliance=1;
          else
              hit_compliance=0;
          end
          V_meas=sscanf(a(4:end),'%e');

      end

      varargout{1}=V_meas;
      if nout==2
          varargout{2}=hit_compliance;
      end

  Method stairCaseMeasureI
    MCode:
      function [V,I_meas] = stairCaseMeasureI(obj,Vrange,nSteps)
      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
      I=obj.Parent.Interface;

      V=linspace(Vrange(1),Vrange(2),nSteps);

      a=query(I,sprintf('WV%i,1,0,%2.5f,%2.5f,%i,%2.3f;MM2,%i;RI%i,18;XE',obj.HwIndex,V(1),V(end),numel(V),obj.limit_I,obj.HwIndex,obj.HwIndex));

      a=strsplit(a,',');
      for i=1:numel(a)
          I_meas(i)=sscanf(a{i}(4:end),'%e');
      end

  Method stairCaseMeasureV
    MCode:
      function [V_meas,I] = stairCaseMeasureV(obj,Irange,nSteps)
      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
      If=obj.Parent.Interface;

      I=linspace(Irange(1),Irange(2),nSteps);

      a=query(If,sprintf('WI%i,1,0,%2.5f,%2.5f,%i,%2.3f;MM2,%i;RI%i,18;XE',obj.HwIndex,I(1),I(end),numel(I),obj.limit_V,obj.HwIndex,obj.HwIndex));

      a=strsplit(a,',');
      for i=1:numel(a)
          V_meas(i)=sscanf(a{i}(4:end),'%e');
      end

  Method stairCaseMeasureVlog
    MCode:
      function [V_meas,I] = stairCaseMeasureVlog(obj,Irange,nSteps)
      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
      If=obj.Parent.Interface;

      I=linspace(Irange(1),Irange(2),nSteps);

      a=query(If,sprintf('WI%i,2,0,%2.5f,%2.5f,%i,%2.3f;MM2,%i;RI%i,18;XE',obj.HwIndex,I(1),I(end),numel(I),obj.limit_V,obj.HwIndex,obj.HwIndex));

      a=strsplit(a,',');
      for i=1:numel(a)
          V_meas(i)=sscanf(a{i}(4:end),'%e');
      end
