MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\matlab-programs\jonathan\drivers\keithley_2000.mdd
DriverType: MATLAB interface object
InstrumentType: Digital Multimeter
InstrumentManufacturer: Keithley
InstrumentModel: 2000
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: :SYSTEM:error?

CreateInitCode
  Code:
    function init(obj)
    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
    obj.UserData.IntegrationStarted=0; %internal singifier, that the integration cycle has been started by invoking 'integration_start'

ConnectInitCode
  Code:
    function init(obj)
    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fprintf(obj.Interface,'*RST;*CLS;:FORMAT:DATA ASC'); %reset, clear, set data format to IEEE754 double precision (this is 20% faster to FETC? than ascii)
    obj.mode='VDC';
    obj.autorange=0;
    obj.autozero=0;
    obj.trigger_source='bus';
    obj.trigger_delay=0;
    obj.trigger_timer='min';
    obj.trigger_count=1;
    obj.filter_count=1;
    obj.filter_enable=0;
    obj.nplc=10;

CleanupCode
  Code:
    function cleanup(obj)
    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
    obj.range=10;
    obj.trigger_source='immediate';
    obj.trigger_continuous=1;
    obj.text=NaN;
    obj.nplc=1;
    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

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property autorange
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'TEMP','FREQ','PRE','DIODE'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              propertyValue=NaN;
              return
          end
      end

      propertyValue=query(g,sprintf(':%s:RANGe:AUTO?',m));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'TEMP','FREQ','PRE','DIODE'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              return
          end
      end

      fprintf(obj.Interface,sprintf(':%s:RANGe:AUTO %f',m,propertyValue));
    PermissibleType: Double enum [1.0, 0.0]
    DefaultValue: 1.0
    ReadOnly: never

  Property autozero
    Type: InstrumentCommand
    ConfigureCommand: :SYST:AZER:STATE
    QueryCommand: :SYST:AZER:STATE?
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 1
    ReadOnly: never
    Description: This command is used to disable or enable autozero. When enabled, accuracy
      is optimized. When disabled, speed is increased at the expense of
      accuracy.
      Important Note: Before you can enable or disable auto-zero, the Model
      2000 must first be in the idle state. The Model 2000 can be placed in the
      idle state by first disabling continuous initiation (:INITiate:CONTinuous
      OFF), and then sending the :ABORt command. After sending the :STATe
      command, readings can be re-started by sending :INITiate:CONTinuous
      ON or :INITiate.

  Property calibration_date
    Type: InstrumentCommand
    QueryCommand: :CAL:PROT:DATE?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property calibration_due
    Type: InstrumentCommand
    QueryCommand: CAL:PROT:NDUE?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property filter_count
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'FREQ'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              propertyValue=NaN;
              return
          end
      end

      propertyValue=query(g,sprintf(':%s:AVER:COUN?',m));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'FREQ'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              return
          end
      end

      fprintf(obj.Interface,sprintf(':%s:AVER:COUN %f',m,propertyValue));
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: These commands are used to specify the filter count. In general, the filter
      count is the number of readings that are acquired and stored in the filter
      buffer for the averaging calculation. The larger the filter count, the more
      filtering that is performed.

  Property filter_enable
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'FREQ'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              propertyValue=NaN;
              return
          end
      end

      propertyValue=str2num(query(g,sprintf(':%s:AVER:STAT?',m)));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'FREQ'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              return
          end
      end

      fprintf(obj.Interface,sprintf(':%s:AVER:STAT %f',m,propertyValue));
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0.0
    ReadOnly: never

  Property integration_done
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      % check if instrument in in 'idle' state

      if(strcmp(obj.operation_condition,'idle'))
          propertyValue = 1;
      else
          propertyValue = 0;
      end
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: check if operation is complete, i.e. integration is done

      if value if '1', then the integration is done and data is available

      this property exists mostly due to generalization.

  Property mode
    Type: InstrumentCommand
    ConfigureCommand: :FUNC
    QueryCommand: :FUNC?
    PermissibleType: String enum [VDC="VOLT:DC", VAC="VOLT:AC", ADC="CURR:DC", AAC="CURR:AC", R="RES", R4t="FRES", TEMP="TEMP", FREQ="FREQ", PERIOD="PER", DIODE="DIOD", CONT="CONT"]
    DefaultValue: VDC
    ReadOnly: never
    Description: mode as in: "what does it measure"

  Property nplc
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface;

      propertyValue=query(g,sprintf(':%s:NPLC?',obj.plainMode));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;

      fprintf(obj.Interface,sprintf(':%s:NPLC %f',obj.plainMode,propertyValue));
    PermissibleType: Double bounded [Max="10.0" Min="0.01"]
    DefaultValue: 0.01
    ReadOnly: never
    Description: integration-time in number of power line-cycles

  Property operation_condition
    Type: InstrumentCommand
    QueryCommand: :STAT:OPER:COND?
    PermissibleType: String enum [idle=1024, waiting for trigger=32, measuring=16]
    DefaultValue: idle
    ReadOnly: always

  Property plainMode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      % get mode in nomenclature of instrument rather than the generalized
      % notation
      g=obj.Interface;
      m=query(g,':FUNC?');
      propertyValue=m(2:end-2); %remove quotation marks
    SetMCode:
      function set(obj, propertyName, propertyValue)
      % readonly
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: mode as known to the instument interaly (read-only)

  Property range
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'TEMP','FREQ','PRE','DIODE'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              propertyValue=NaN;
              return
          end
      end

      propertyValue=query(g,sprintf(':%s:RANGe?',m));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'TEMP','FREQ','PRE','DIODE'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              return
          end
      end

      fprintf(obj.Interface,sprintf(':%s:RANGe %f',m,propertyValue));
    PermissibleType: Double none
    DefaultValue: 1
    ReadOnly: never
    Description: range of the instrument

  Property text
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface
      t=query(g,':DISP:TEXT:STAT?');
      if t==0
          propertyValue=NaN;
      else
          t=query(g,':DISP:TEXT:DATA?');
          propertyValue=t(2:end-2); %remove " ... "
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;

      if numel(propertyValue) > 12
          propertyValue=propertyValue(1:12);
      end

      if isnan(propertyValue)
          fprintf(g,':DISP:TEXT:STATe 0');
      else
          fprintf(g,sprintf(':DISP:TEXT:STATe 1; :DISP:TEXT:DATA "%s"',propertyValue));
      end
    PermissibleType: String none
    PermissibleType: Double none
    ReadOnly: never

  Property trigger_continuous
    Type: InstrumentCommand
    ConfigureCommand: :INITiate:CONTinuous
    QueryCommand: :INITiate:CONTinuous?
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0.0
    ReadOnly: never

  Property trigger_count
    Type: InstrumentCommand
    ConfigureCommand: :TRIG:COUN
    QueryCommand: :TRIG:COUN?
    PermissibleType: Double bounded [Max="9999.0" Min="0.0"]
    PermissibleType: String enum [INF=INF]
    DefaultValue: 0.0
    ReadOnly: never

  Property trigger_delay
    Type: InstrumentCommand
    ConfigureCommand: :TRIG:DEL
    QueryCommand: :TRIG:DEL?
    PermissibleType: Double bounded [Max="999999.999" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never
    Description: trigger delay in seconds

  Property trigger_source
    Type: InstrumentCommand
    ConfigureCommand: :TRIG:SOUR
    QueryCommand: :TRIG:SOUR?
    PermissibleType: String enum [immediate=IMM, timer=TIM, manual=MAN, bus=BUS, external=EXT]
    DefaultValue: immediate
    ReadOnly: never

  Property trigger_timer
    Type: InstrumentCommand
    ConfigureCommand: :TRIG:TIM
    QueryCommand: :TRIG:TIM?
    PermissibleType: Double bounded [Max="999999.999" Min="0.001"]
    PermissibleType: String enum [default=0.1, min=0.001]
    DefaultValue: 0.001
    ReadOnly: never

  Method getX
    MCode:
      function result=getX(obj)
      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
      if ~obj.UserData.IntegrationStarted %internal singifier, that the integration cycle has been started by invoking 'integration_start'
          %see wich state we are in:
          state=obj.operation_condition;
          switch state
              case 'idle'
                  invoke(obj,'integration_start');
              case 'waiting for trigger'
                  fprintf(obj.Interface,'*TRG');
          end %if the instrument is already measuring, there is nothing else to do than to wait
      end

      while ~obj.integration_done
          %do nothing, just wait and see ;)
      end

      % for :FORMAT:DATA ASC
      result=sscanf(query(obj.Interface,'FETC?'),'%e');

      % for :FORMAT:DATA DREAl  double precision binary
      %fprintf(obj.Interface,'FETC?');
      %fread(obj.Interface,2); %skip header: first 2 bytes
      %[result,COUNT,MSG]=fread(obj.Interface,8,'double'); %read data
      %flushinput(obj.Interface); %empty buffer

      if result==9.9E37 %this means overflow
          result=NaN;
      end

      obj.UserData.IntegrationStarted=0; %internal singifier, that the integration cycle is done.
    Description: use as follows:

      invoke(obj,'integration_start');
      while(~obj.ingetration_done)
      	%do whatever you so desire in the meantime
      end
      reading=invoke(obj,'getX'); %finally read data

  Method getXY
    MCode:
      function r=getXY(obj)
      %this function exists to provide better interchangebility between LockIn
      %and DC-Measurements. As we are only reading DC there is no imaginary part
      %and we can just return 'getX'
      r=invoke(obj,'getX');

  Method integration_start
    MCode:
      function integration_start(obj)
      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
      fprintf(obj.Interface,'*WAI;:INIT;*TRG');
      obj.UserData.IntegrationStarted=1;%internal singifier, that the integration cycle has been invoked by this method.
    Description: signify the start of an integration. (i.e. data aquisition, once the integration is done the property integration_done will be '1')

      this essentially triggers the instrument. It also relies on trigger_continuos to be '1'.


      This functionality has been added to enhance portablility between different instruments (Lock-In amplifiers and multimeters, for interchangable ac and dc measurements)
