MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\matlab-programs\jonathan\drivers\keithley_2000.mdd
DriverType: MATLAB interface object
InstrumentType: Digital Multimeter
InstrumentManufacturer: Keithley
InstrumentModel: 2000
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: :SYSTEM:error?

CreateInitCode
  Code:
    function init(obj)
    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
    obj.UserData.IntegrationStarted=0; %internal singifier, that the integration cycle has been started by invoking 'integration_start'
    obj.UserData.nsamples=NaN; % number of samples per aquisition-cycle: if > 1 use instruments internal buffer, trigger several times and then retrieve data (this is much faster for many datapoints)
    obj.UserData.Cache.plainMode=NaN;
    obj.UserData.Cache.plainModeTic=NaN;
    obj.UserData.SampleCount=0;
    obj.UserData.UsingBuffer=0; %was 1
    obj.UserData.BufferEngaged=0;

ConnectInitCode
  Code:
    function init(obj)
    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obj.Interface.Timeout=0.5;
    fprintf(obj.Interface,'*RST;*CLS;:SYST:PRES;:FORMAT:DATA ASC'); %reset, clear, set data format to IEEE754 double precision (this is 20% faster to FETC? than ascii)
    obj.mode='VDC';
    obj.autorange=0;
    obj.autozero=0;
    invoke(obj.Trigger,'default')
    obj.filter_count=1;
    obj.filter_enable=0;
    obj.nplc=1;

CleanupCode
  Code:
    function cleanup(obj)
    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
    obj.range=10;
    obj.Trigger.source='immediate';
    obj.Trigger.init_continuous=1;
    obj.text=NaN;
    obj.nplc=1;
    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

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property autorange
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'TEMP','FREQ','PRE','DIODE'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              propertyValue=NaN;
              return
          end
      end

      propertyValue=query(g,sprintf(':%s:RANGe:AUTO?',m));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'TEMP','FREQ','PRE','DIODE'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              return
          end
      end

      fprintf(obj.Interface,sprintf(':%s:RANGe:AUTO %f',m,propertyValue));
    PermissibleType: Double enum [1.0, 0.0]
    DefaultValue: 1.0
    ReadOnly: never

  Property autozero
    Type: InstrumentCommand
    ConfigureCommand: :SYST:AZER:STATE
    QueryCommand: :SYST:AZER:STATE?
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 1
    ReadOnly: never
    Description: This command is used to disable or enable autozero. When enabled, accuracy
      is optimized. When disabled, speed is increased at the expense of
      accuracy.
      Important Note: Before you can enable or disable auto-zero, the Model
      2000 must first be in the idle state. The Model 2000 can be placed in the
      idle state by first disabling continuous initiation (:INITiate:CONTinuous
      OFF), and then sending the :ABORt command. After sending the :STATe
      command, readings can be re-started by sending :INITiate:CONTinuous
      ON or :INITiate.

  Property calibration_date
    Type: InstrumentCommand
    QueryCommand: :CAL:PROT:DATE?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property calibration_due
    Type: InstrumentCommand
    QueryCommand: CAL:PROT:NDUE?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property filter_count
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'FREQ'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              propertyValue=NaN;
              return
          end
      end

      propertyValue=query(g,sprintf(':%s:AVER:COUN?',m));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'FREQ'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              return
          end
      end

      fprintf(obj.Interface,sprintf(':%s:AVER:COUN %f',m,propertyValue));
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: These commands are used to specify the filter count. In general, the filter
      count is the number of readings that are acquired and stored in the filter
      buffer for the averaging calculation. The larger the filter count, the more
      filtering that is performed.

  Property filter_enable
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'FREQ'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              propertyValue=NaN;
              return
          end
      end

      propertyValue=str2num(query(g,sprintf(':%s:AVER:STAT?',m)));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'FREQ'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              return
          end
      end

      fprintf(obj.Interface,sprintf(':%s:AVER:STAT %f',m,propertyValue));
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0.0
    ReadOnly: never

  Property integration_done
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      % check if instrument in in 'idle' state

      if(strcmp(obj.operation_condition,'idle'))
          propertyValue = 1;
      else
          propertyValue = 0;
      end
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: check if operation is complete, i.e. integration is done

      if value if '1', then the integration is done and data is available

      this property exists mostly due to generalization.

  Property mode
    Type: InstrumentCommand
    ConfigureCommand: :FUNC
    QueryCommand: :FUNC?
    PermissibleType: String enum [VDC="VOLT:DC", VAC="VOLT:AC", ADC="CURR:DC", AAC="CURR:AC", R="RES", R4t="FRES", TEMP="TEMP", FREQ="FREQ", PERIOD="PER", DIODE="DIOD", CONT="CONT"]
    DefaultValue: VDC
    ReadOnly: never
    Description: mode as in: "what does it measure"

  Property nplc
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface;

      propertyValue=query(g,sprintf(':%s:NPLC?',obj.plainMode));
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;

      fprintf(obj.Interface,sprintf(':%s:NPLC %f;*WAI',obj.plainMode,propertyValue));
    PermissibleType: Double bounded [Max="10.0" Min="0.01"]
    DefaultValue: 0.01
    ReadOnly: never
    Description: integration-time in number of power line-cycles

  Property operation_condition
    Type: InstrumentCommand
    QueryCommand: :STAT:OPER:COND?
    PermissibleType: String enum [idle=1024, waiting for trigger=32, measuring=16]
    DefaultValue: idle
    ReadOnly: always

  Property plainMode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      % get mode in nomenclature of instrument rather than the generalized
      % notation

      if ~isnan(obj.UserData.Cache.plainModeTic) && toc(obj.UserData.Cache.plainModeTic) < 0.3 %keep cache for 300ms
          propertyValue=obj.UserData.Cache.plainMode;
      else
          g=obj.Interface;
          m=query(g,':FUNC?');
          propertyValue=m(2:end-2); %remove quotation marks
          if strcmp(m,'\n')
              propertyValue=obj.UserData.Cache.plainMode;
              warning(':FUNC? returned NIL. using cached plainMode');
          else
              obj.UserData.Cache.plainMode=propertyValue;
              obj.UserData.Cache.plainModeTic=tic;
          end
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      % readonly
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: mode as known to the instument interaly (read-only)

  Property range
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'TEMP','FREQ','PRE'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              propertyValue=NaN;
              return
          end
      end

      if strcmp(m,'DIOD')
          propertyValue=query(g,':DIODe:CURRent:RANGe?');
      else
          propertyValue=query(g,sprintf(':%s:RANGe?',m));
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;
      m=obj.plainMode;

      %these functions know no range
      noRange={'TEMP','FREQ','PRE'};
      for i=1:numel(noRange)
          if strcmp(m,noRange(i))
              return
          end
      end

      if strcmp(m,'DIOD')
          fprintf(obj.Interface,sprintf(':DIODe:CURRent:RANGe %f',propertyValue));
      else
          fprintf(obj.Interface,sprintf(':%s:RANGe %f',m,propertyValue));
      end
    PermissibleType: Double none
    DefaultValue: 1
    ReadOnly: never
    Description: range of the instrument

  Property text
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface
      t=query(g,':DISP:TEXT:STAT?');
      if t==0
          propertyValue=NaN;
      else
          t=query(g,':DISP:TEXT:DATA?');
          propertyValue=t(2:end-2); %remove " ... "
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      g=obj.Interface;

      if numel(propertyValue) > 12
          propertyValue=propertyValue(1:12);
      end

      if isnan(propertyValue)
          fprintf(g,':DISP:TEXT:STATe 0');
      else
          fprintf(g,sprintf(':DISP:TEXT:STATe 1; :DISP:TEXT:DATA "%s"',propertyValue));
      end
    PermissibleType: String none
    PermissibleType: Double none
    ReadOnly: never

  Method getX
    MCode:
      function result=getX(obj)
      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

      if obj.UserData.BufferEngaged==0
          if ~obj.UserData.IntegrationStarted %internal singifier, that the integration cycle has been started by invoking 'integration_start'
              %see wich state we are in:
              state=obj.operation_condition;
              switch state
                  case 'idle'
                      invoke(obj,'integration_start');
                  case 'waiting for trigger'
                      fprintf(obj.Interface,'*TRG');
              end %if the instrument is already measuring, there is nothing else to do than to wait
          end

          while ~obj.integration_done
              %do nothing, just wait and see ;)
              pause(0.005);
          end

          % for :FORMAT:DATA ASC
          result=sscanf(query(obj.Interface,'FETC?'),'%e');

          % for :FORMAT:DATA DREAl  double precision binary
          %fprintf(obj.Interface,'FETC?');
          %fread(obj.Interface,2); %skip header: first 2 bytes
          %[result,COUNT,MSG]=fread(obj.Interface,8,'double'); %read data
          %flushinput(obj.Interface); %empty buffer

          if result==9.9E37 %this means overflow
              result=NaN;
          end
      else
        result=invoke(obj.Buffer,'fetch');
      end

      obj.UserData.SampleCount=0;
      obj.UserData.IntegrationStarted=0; %internal singifier, that the integration cycle is done.
    Description: use as follows:

      invoke(obj,'integration_start');
      while(~obj.ingetration_done)
      	%do whatever you so desire in the meantime
      end
      reading=invoke(obj,'getX'); %finally read data

  Method getXY
    MCode:
      function r=getXY(obj)
      %this function exists to provide better interchangebility between LockIn
      %and DC-Measurements. As we are only reading DC there is no imaginary part
      %and we can just return 'getX'
      r=invoke(obj,'getX');

  Method integration_start
    MCode:
      function integration_start(obj)
      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

      if  obj.UserData.UsingBuffer==1 && obj.UserData.SampleCount == 0
          obj.Buffer.status=1;
          invoke(obj.Buffer,'engage');
      end

      if strcmp(obj.Trigger.source,'external')
              %fprintf(obj.Interface,'trac:cle');
              %fprintf(obj.Interface,'trac:feed:cont next'); % clear data and set feed to 'next' again
              if ~obj.Trigger.init_continuous==1
                 fprintf(obj.Interface,'*WAI;:INIT');
              end
          else
              if obj.Trigger.init_continuous==1
                  fprintf(obj.Interface,'*WAI;*TRG');
              else
                  fprintf(obj.Interface,'*WAI;:INIT;*TRG');
              end
          end
          obj.UserData.IntegrationStarted=1;%internal singifier, that the integration cycle has been invoked by this method.
          obj.UserData.SampleCount=obj.UserData.SampleCount+1;
          if obj.UserData.SampleCount > obj.Buffer.count
              warning('maximum of %f samples reached',obj.Trigger.sample_count);
          end
    Description: signify the start of an integration. (i.e. data aquisition, once the integration is done the property integration_done will be '1')

      this essentially triggers the instrument. It also relies on trigger_continuos to be '1'.


      This functionality has been added to enhance portablility between different instruments (Lock-In amplifiers and multimeters, for interchangable ac and dc measurements)

Group buffer
  Size: 1
  Mappings ChannelMap Command="buffer" Index="1"

  Property count
    Type: InstrumentCommand
    ConfigureCommand: :TRACe:POINts
    QueryCommand: :TRACe:POINts?
    PermissibleType: Double bounded [Max="1024.0" Min="2.0"]
    DefaultValue: 2.0
    ReadOnly: never

  Property source
    Type: InstrumentCommand
    ConfigureCommand: :TRACe:FEED
    QueryCommand: :TRACe:FEED?
    PermissibleType: String enum [raw=SENSe1, calc=CALCulate1, none=NONE]
    DefaultValue: raw
    ReadOnly: never

  Property status
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      r=query(obj.Parent.Interface,':TRACe:FEED:CONTrol?');
      if strcmp(r(1:4),'NEXT')
          propertyValue=1;
      else
          propertyValue=0;
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      if propertyValue==1
          %fprintf(obj.Parent.Interface,':TRACe:FEED:CONTrol NEXT'); this is
          %taken over by the engage-command
          invoke(obj,'engage');
          obj.Parent.UserData.UsingBuffer=1;
      else
          fprintf(obj.Parent.Interface,':TRACe:FEED:CONTrol NEVer');
          invoke(obj,'clear');
          obj.Parent.UserData.UsingBuffer=0;
      end
    PermissibleType: Double enum [1.0, 0.0]
    DefaultValue: 1.0
    ReadOnly: never

  Method clear
    Type: InstrumentCommand
    Line Command=":TRACe:CLEar" Output="false"

  Method engage
    MCode:
      function engage(obj,nsamples)
      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invoke(obj,'clear');
      %obj.Parent.Trigger.init_continuous=1;
      invoke(obj.Parent.Trigger,'init');
      if nargin > 1
          obj.count=nsamples;
      end
      obj.source='raw';
      %obj.status=1; instead of this we call engage for obj.set.status==1,
      %therefore we have to call the next one "by hand" to avoid infinite recursion
      fprintf(obj.Parent.Interface,':TRACe:FEED:CONTrol NEXT');
      fprintf(obj.Parent.Interface,'stat:meas:enab 512;*SRE 1;'); %enable SRQ on BFL

      obj.Parent.UserData.BufferEngaged=1;

  Method fetch
    MCode:
      function result=fetch(obj)
      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

      I=obj.Parent.Interface;
      %wait for SRQ , BFL @ MSB (bits set by engage-method)
      stb=0;
      a=tic;
      while bitand(stb,1)==0
          [~,stb]=spoll(I);
          pause(0.001);
          if toc(a) > 10
              error('Timed out while waiting for full buffer');
          end
      end
      fprintf(I,'*CLS'); % clear status byte

          fprintf(I,':format:data dreal');
          nvalues=obj.count;
          % adjust input buffer size of VISA object = interface
          esize = 16;
          fclose(I);
          oldInpBSize = get(I,'InputBufferSize');
          set(I,'InputBufferSize',nvalues*esize);
          fopen(I);

          fprintf(I,'*WAI;trac:data?');

          fread(I,2); %skip header: first 2 bytes
          [result,COUNT,MSG]=fread(I,nvalues,'double'); %read data

          flushinput(I); %empty software-buffer
          clrdevice(I);  %empty hardware-buffer

          % configure old InputBufferSize
          fclose(I);
          set(I,'InputBufferSize',oldInpBSize);
          fopen(I);
          fprintf(I,':format:data asc');
          fprintf(I,'trac:cle'); % clear data and set feed to 'next' again
          fprintf(I,'trac:feed:cont next');

          obj.Parent.UserData.BufferEngaged=0;

Group trigger
  Size: 1
  Mappings ChannelMap Command="trigger" Index="1"

  Property count
    Type: InstrumentCommand
    ConfigureCommand: :TRIG:COUN
    QueryCommand: :TRIG:COUN?
    PermissibleType: Double bounded [Max="9999.0" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never

  Property delay
    Type: InstrumentCommand
    ConfigureCommand: :TRIG:DEL
    QueryCommand: :TRIG:DEL?
    PermissibleType: Double bounded [Max="999999.999" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never

  Property init_continuous
    Type: InstrumentCommand
    ConfigureCommand: :INITiate:CONTinuous
    QueryCommand: :INITiate:CONTinuous?
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0.0
    ReadOnly: never

  Property sample_count
    Type: InstrumentCommand
    ConfigureCommand: :SAMPLE:COUNT
    QueryCommand: :SAMPLE:COUNT?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property source
    Type: InstrumentCommand
    ConfigureCommand: :TRIG:SOUR
    QueryCommand: :TRIG:SOUR?
    PermissibleType: String enum [immediate=IMM, timer=TIM, manual=MAN, bus=BUS, external=EXT]
    DefaultValue: immediate
    ReadOnly: never

  Property timer
    Type: InstrumentCommand
    ConfigureCommand: :TRIG:TIM
    QueryCommand: :TRIG:TIM?
    PermissibleType: Double bounded [Max="999999.999" Min="0.001"]
    PermissibleType: String enum [min=min]
    DefaultValue: 0.001
    ReadOnly: never

  Method default
    MCode:
      function default(obj)
      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obj.source='bus';
      obj.delay=0;
      obj.timer='min';
      obj.count=1;
      obj.init_continuous=0;

  Method init
    Type: InstrumentCommand
    Line Command=":init" Output="false"
