MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\Users\jonathan.becker\Dropbox\wsi-backup\transport\software\jb-suite\drivers\lakeshore_625.mdd
DriverType: MATLAB interface object
InstrumentType: Oscilloscope
InstrumentManufacturer: LakeShore
InstrumentModel: 625
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: *STB?

CreateInitCode
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
ConnectInitCode
  Type: InstrumentCommand
  Code:
    MODE 1

CleanupCode
  Type: InstrumentCommand
  Code:
    MODE 0

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property current_B
    Type: InstrumentCommand
    QueryCommand: RDGF?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property current_I
    Type: InstrumentCommand
    QueryCommand: RDGI?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property current_remoteV
    Type: InstrumentCommand
    QueryCommand: RDGRV?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property current_V
    Type: InstrumentCommand
    QueryCommand: RDGV?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property is_ramping
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      %determine if field is still beeing ramped.
      %i.e. within 2% of the requested value

      %query Operation Condition register
      a=query(obj.Interface,'OPST?');

      %bit 1 (in matlab: bit #2) indicates Ramp Done
      if bitget(str2num(a),2) == 1
          propertyValue = 0
      else
          propertyValue = 1
      end
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property limit_current
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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a=query(obj.Interface,'LIMIT?');
      r=sscanf(a,'%f,%f,%f');
      propertyValue=r(1);
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property limit_rate
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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a=query(obj.Interface,'LIMIT?');
      r=sscanf(a,'%f,%f,%f');
      propertyValue=r(3);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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fprintf(obj.Interface
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property limit_voltage
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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a=query(obj.Interface,'LIMIT?');
      r=sscanf(a,'%f,%f,%f');
      propertyValue=r(2);
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property quench_parameter
    Type: InstrumentCommand
    QueryCommand: QNCH?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property rate
    Type: InstrumentCommand
    ConfigureCommand: RATE
    QueryCommand: RATE?
    PermissibleType: Double bounded [Max="0.2208" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never

  Property remote
    Type: InstrumentCommand
    ConfigureCommand: MODE
    QueryCommand: MODE?
    PermissibleType: String enum [Local=0, Remote=1, Lockout=2]
    DefaultValue: Local
    ReadOnly: never

  Property setB
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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a=query(obj.Interface,'SETF?');
      r=sscanf(a,'%f');
      propertyValue=r;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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fprintf(obj.Interface,sprintf('SETF %2.4E',propertyValue));
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property setI
    Type: InstrumentCommand
    ConfigureCommand: SETI
    QueryCommand: SETI?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property setV
    Type: InstrumentCommand
    ConfigureCommand: SETV
    QueryCommand: SETV?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
