MATLABInstrumentDriver
FileVersion: 2.42
DriverName: T:\Documentation-LabN101\Software\MATLAB\jb-suite\drivers\lakeshore_DT670.mdd
DriverType: MATLAB generic
InstrumentType: Temperature Sensor
InstrumentManufacturer: Lakeshore
InstrumentModel: DT670
InstrumentVersion: 1.0

CreateInitCode
  Code:
    function init(obj)
    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obj.UserData.DT600StandardCurveInterpolationTable = [...
                    1.4 1.64429;
                    1.5 1.64299;
                    1.6 1.64157;
                    1.7 1.64003;
                    1.8 1.63837;
                    1.9 1.6366;
                    2 1.63472;
                    2.1 1.63274;
                    2.2 1.63067;
                    2.3 1.62852;
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                    495 0.10145];

ConnectInitCode
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
CleanupCode
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
Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Method transfer
    MCode:
      function Temperature=transfer(obj,voltage)
      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%made my life simple ... but hey; close enough
      Temperature=interp1(obj.UserData.DT600StandardCurveInterpolationTable(:,2),obj.UserData.DT600StandardCurveInterpolationTable(:,1),voltage);

  Method transferRev
    MCode:
      function voltage=transferRev(obj,Temperature)
      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voltage=interp1(obj.UserData.DT600StandardCurveInterpolationTable(:,1),obj.UserData.DT600StandardCurveInterpolationTable(:,2),Temperature);
