MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\matlab-programs\drivers\lhcd_tempcontroller.mdd
DriverType: MATLAB interface object
InstrumentType: TemperatureController
InstrumentManufacturer: LHDC
InstrumentModel: ATC
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
  Code:
    function init(obj)
    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obj.Interface.Terminator='CR';

ConnectInitCode
  Type: InstrumentCommand

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property gasvalve
    Type: InstrumentCommand
    ConfigureCommand: !gasvalve
    QueryCommand: !gasvalve?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property heater_current
    Type: InstrumentCommand
    ConfigureCommand: !outp
    QueryCommand: !outp?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property kd
    Type: InstrumentCommand
    ConfigureCommand: !kd
    QueryCommand: !kd?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property ki
    Type: InstrumentCommand
    ConfigureCommand: !ki
    QueryCommand: !ki?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property kp
    Type: InstrumentCommand
    ConfigureCommand: !kp
    QueryCommand: !kp?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property pressure
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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r=query(obj.Interface,'!pressure?');
      propertyValue=str2num(r);
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property setpoint
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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r=query(obj.Interface,'!setpoint?');
      propertyValue=str2num(r);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      fprintf(obj.Interface,sprintf('!setpoint %1.1f',propertyValue));
    PermissibleType: Double bounded [Max="550.0" Min="0.0"]
    DefaultValue: 0
    ReadOnly: never

  Property streaming_enabled
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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r=query(obj.Interface,'!streaming?');
      if abs(str2num(r)-1.0) < eps(1.0)
          propertyValue=1;
      else
          propertyValue=0;
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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if abs(propertyValue-1.0) < eps(1.0)
          propertyValue=1;
      else
          propertyValue=0;
      end
      fprintf(obj.Interface,sprintf('!streaming %1.1f',propertyValue));
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0.0
    ReadOnly: never

  Property streaming_interval
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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r=query(obj.Interface,'!streaming_interval?');
      propertyValue=str2num(r);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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fprintf(obj.Interface,sprintf('!streaming_interval %1.1f',propertyValue));
    PermissibleType: Double bounded [Max="500.0" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never

  Property temperature
    Type: InstrumentCommand
    QueryCommand: !temp?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property vacvalve
    Type: InstrumentCommand
    ConfigureCommand: !vacvalve
    QueryCommand: !vacvalve?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method flush
    MCode:
      function p=flush(obj,n,p_Low,p_High)
      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
      if nargin < 4
          p_High=900;
      end
      if nargin < 3
          p_Low=0;
      end
      if nargin < 2
          n=3;
      end

      t=obj.Interface.Timeout;
      obj.Interface.Timeout=80*n; %as this takes a while we have to wait for longer
      p=query(obj.Interface,sprintf('!flush %1.0d %d %d',n,p_Low,p_High));
      p=str2num(p);
      obj.Interface.Timeout=t;

  Method getX
    Type: InstrumentCommand
    Line Command="!temp?" Format="numeric" Output="true" ReadOutputAs="ASCII"

  Method pump_to
    MCode:
      function p=pump_to(obj,pressure)
      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
      t=obj.Interface.Timeout;
      obj.Interface.Timeout=80; %as this takes a while we have to wait for longer
      p=query(obj.Interface,sprintf('!pump %d',pressure));
      p=str2num(p);
      obj.Interface.Timeout=t;

  Method vent_to
    MCode:
      function p=vent_to(obj,pressure)
      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
      t=obj.Interface.Timeout;
      obj.Interface.Timeout=80; %as this takes a while we have to wait for longer
      p=query(obj.Interface,sprintf('!vent %d',pressure));
      p=str2num(p);
      obj.Interface.Timeout=t;
