MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\Matlab Programs\jb-suite\drivers\oxford_itc4.mdd
DriverType: MATLAB interface object
InstrumentType: Temperature Controller
InstrumentManufacturer: Oxford
InstrumentModel: ITC4
InstrumentVersion: 1.0

CreateInitCode
  Code:
    function init(obj)
    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obj.Interface.Terminator='CR';
    obj.UserData.tempsensor=1;

ConnectInitCode
  Code:
    function init(obj)
    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obj.remote=1;
    obj.tempsensor=1;

CleanupCode
  Code:
    function cleanup(obj)
    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obj.remote=0;

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property remote
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      invoke(obj,'flushInterface');

      fprintf(obj.Interface,'X');
      res=fread(obj.Interface,9);
      res=char(res')
      %the answer will be formatted like 'XnAnCnSnn' with n beeing a digit
      %here we are intrested in the "C"-Part
      C=res(6);

      %C0 : local & locked
      %C1 : remote & locked
      %C2 : local
      %C3 : remote

      %if the intrument is in a locked state we want to unlock it.
      switch C
          case '0'
              fprintf(obj.Interface,'$C2');
              propertyValue=0;
          case '1'
              fprintf(obj.Interface,'$C3');
              propertyValue=1;
          case '2'
              propertyValue=0;
          case '3'
              propertyValue=1;
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      invoke(obj,'flushInterface');

      if propertyValue==1
          % 1 means switch to remote mode
          fprintf(obj.Interface,'$C3');
      else
          fprintf(obj.Interface,'$C2');
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property settemp
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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invoke(obj,'flushInterface');

      res=query(obj.Interface,'R0');
      %return value will be sth. like R+00012 in case of 1.2K
      propertyValue=str2num(res(3:end))/10;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(obj,'flushInterface');

      obj.remote=1;
      fprintf(obj.Interface,sprintf('$T%05.0f',propertyValue*10));
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property tempsensor
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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invoke(obj,'flushInterface');

      r=obj.remote;

      obj.remote=1;
      propertyValue=obj.UserData.tempsensor;

      fprintf(obj.Interface,sprintf('$H%1.0f',obj.UserData.tempsensor));

      obj.remote=r;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(obj,'flushInterface');

      obj.remote=1;
      fprintf(obj.Interface,sprintf('$H%1.0f',propertyValue));
      obj.UserData.tempsensor=propertyValue;
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method flushInterface
    MCode:
      function flushInterface(obj)
      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
      I=obj.Interface;

          flushinput(I); %empty software-buffer
         % clrdevice(I);  %empty hardware-buffer

  Method getT
    MCode:
      function value=getT(obj,n)
      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
      invoke(obj,'flushInterface');

      if nargin < 2
          n=1;
      end

      n=floor(n);
      if n > 3
          n=3;
      end
      if n < 1
          n=1;
      end

      fprintf(obj.Interface,sprintf('R%1.0f',n));
      to=obj.Interface.Timeout;
      obj.Interface.Timeout=0.05; %hurry up ...
      res=fread(obj.Interface,8);
      obj.Interface.Timeout=to;
      res=char(res');

      value=str2num(res(3:end))/10;

      if isempty(value)
          value=NaN;
      end
      %value=value(1); %seems to be a random hickup every 141 or so samples

  Method getX
    MCode:
      function value=getX(obj,n)
      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
      if nargin < 2
          n=1;
      end
      value=invoke(obj,'getT',n);
