MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\Users\jonathan.becker\Dropbox\wsi-backup\transport\software\jb-suite\drivers\yokogawa_7651.mdd
DriverType: MATLAB interface object
InstrumentType: DC Power Supply
InstrumentManufacturer: Yokogawa
InstrumentModel: 7651
InstrumentVersion: 1.1
Identify: OSE
Reset: RCE

CreateInitCode
  Code:
    function init(obj)
    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obj.UserData.valueCache=NaN;    % the value-cache is used to prevent the driver to read back the value form the instrument immediately after setting the value; this reduces gpib-traffic and thus delay significantly
    obj.UserData.valueCacheLastUpdate=NaN; % place tic-value in this var
    obj.UserData.sequence=NaN;

    obj.UserData.lastStatus.range=NaN;
    obj.UserData.lastStatus.value=NaN;
    obj.UserData.lastStatus.timestamp=NaN; %reset cache

ConnectInitCode
  Code:
    function init(obj)
    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
    %obj.limit_A=10;
    %obj.limit_V=5;
    g=obj.Interface;
    fprintf(g,'H1E'); %enable header output;
    obj.UserData.rangeCache=obj.range;
    %obj.UserData.valueCache=NaN;    % the value-cache is used to prevent the driver to read back the value form the instrument immediately after setting the value; this reduces gpib-traffic and thus delay significantly
    %obj.UserData.valueCacheLastUpdate=NaN; % place tic-value in this var
    %obj.UserData.sequence=NaN;
    invoke(obj,'decodeStatus');

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property limit_A
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      d=invoke(obj,'decodeStatus');
      propertyValue=1E-3*d.limit_A;
    SetMCode:
      function set(obj, propertyName, propertyValue)

      propertyValue=round(propertyValue*1e3)*1e-3;

      %obj.UserData.lastStatus.timestamp=0; %reset cache
      obj.UserData.lastStatus.limit_A=propertyValue;
      g=obj.Interface;
      fprintf(g,sprintf('LA%1.0f',propertyValue*1E3));
    PermissibleType: Double bounded [Max="0.12" Min="0.005"]
    DefaultValue: 0.005
    ReadOnly: never
    Description: current-limit in ampere. (only applies to constant voltage mode)

  Property limit_V
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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d=invoke(obj,'decodeStatus');
      propertyValue=d.limit_V;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      propertyValue=round(propertyValue);

      %obj.UserData.lastStatus.timestamp=0; %reset cache
      obj.UserData.lastStatus.limit_V=propertyValue;

      g=obj.Interface;
      fprintf(g,sprintf('LV%1.0f',propertyValue));
    PermissibleType: Double bounded [Max="30.0" Min="1.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: voltage limit in V (only applies to constant current mode)

  Property mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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d=invoke(obj,'decodeStatus');
      propertyValue=d.mode;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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%obj.UserData.lastStatus.timestamp=0; %reset cache

      if(strcmp(propertyValue,'CC'))
          obj.UserData.lastStatus.mode='CC';
          g=obj.Interface;
          fprintf(g,'F5E');
      elseif(strcmp(propertyValue,'CV'))
          obj.UserData.lastStatus.mode='CV';
          g=obj.Interface;
          fprintf(g,'F1E');
      else
          error('unknown function, choose CC or CV');
      end
    PermissibleType: String enum [unknown=, CC=CC, CV=CV]
    DefaultValue: unknown
    ReadOnly: never
    Description: set mode:
      CC - Constant Current
      CV - Constant Voltage

  Property output_enabled
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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if isfield(obj.UserData,'output')
          propertyValue=obj.UserData.output;
      else
          obj.UserData.output=NaN;
          propertyValue=NaN;
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)

      g=obj.Interface;
      if(propertyValue)
          fprintf(g,'O1E');
          obj.UserData.output=1;
      else
          fprintf(g,'O0E');
          obj.UserData.output=0;
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: enable/disable output

  Property overload
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      g=obj.Interface;
      s=query(g,'OD');
      if s(1) == 'N'
          propertyValue=0;
      elseif s(1) == 'E'
          propertyValue=1;
      else
          propertyValue=NaN;
      end
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: indicates overload-condition (i.e. limit_A or limit_V has been hit)

  Property range
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      d=invoke(obj,'decodeStatus');
      propertyValue=d.range;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      obj.UserData.lastStatus.timestamp=0; %reset cache

      CVrange=[12E-3 120E-3 1.2 12 32];
      CVrangeCMD={'R2','R3','R4','R5','R6'};

      CCrange=[1.2E-3 12E-3 120E-3];
      CCrangeCMD={'R4','R5','R6'};
      if strcmp(obj.mode,'CV')
           range    = CVrange;
           rangeCMD = CVrangeCMD;
           if(propertyValue > 32)
              warning('requested value %fV is out of range. max allowed range is 32V',propertyValue);
           end
      else
           range    = CCrange;
           rangeCMD = CCrangeCMD;
           if(propertyValue > 120E-3)
               warning('requested value %fA is out of range. max allowed range is 120mA',propertyValue);
           end
      end
          %find nearest
      ind=find(range >= abs(propertyValue),1);
      obj.UserData.lastStatus.range=range(ind);
      g=obj.Interface;
      fprintf(g,sprintf('%sE',rangeCMD{ind}));
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: range in V/A, depending of CC or CV mode.

      upon arbitrary (double) input the instrument output range is set to the smallest possible value, that still allows to output the requested value:

      e.g.: 50E-3 in CV-mode sets the range to 120mV

  Property value
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      if ~isnan(obj.UserData.valueCacheLastUpdate) && toc(obj.UserData.valueCacheLastUpdate) < 0.3 % keep the cache for 300ms
          propertyValue=obj.UserData.valueCache;
      else
          g=obj.Interface;
          s=query(g,'OD');
          propertyValue=sscanf(s(5:end),'%f'); %ignore header and read rest
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      %obj.UserData.lastStatus.timestamp=0; %reset cache

      d=invoke(obj,'decodeStatus');

      if(abs(propertyValue) > d.range) %using rangeCache here: might not me the most recent value, but significantly quicker, as this cache is local
      %if(propertyValue > obj.range)
          error('Yokokaga 7651: exceeding range!');
      end

      g=obj.Interface;
      fprintf(g,'S%fE',propertyValue);
      obj.UserData.valueCache=propertyValue;
      obj.UserData.valueCacheLastUpdate=tic;
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: set: set instrument output, in V/A
      get: current output value in V/A

  Method decodeStatus
    MCode:
      function s=decodeStatus(obj)
      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
      if(~isfield(obj.UserData,'lastStatus')) || (now - obj.UserData.lastStatus.timestamp > 5*1.1690e-05)
         %if data is older than 5*1 second: request again

          g=obj.Interface;

          fprintf(g,'OSE');
          i=1;
          line='       ';
          while(~strcmp(line(1:3),'END'))
              line=fscanf(g);
              data{i}=line;
              i=i+1;
          end

          s.timestamp=now;
          RangeCode=data{2}(1:4);

          %converts a range code in format FmRm (e.g. F1R3) to
          % "readable" range (e.g. '10mV')
          % does not contact Yokogawa - just Matlab
          % -- Dominik Irber, 11.01.2015

      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
          outputTypeCode = RangeCode(1:2);
          rangeCode = RangeCode(3:4);

          s.RangeCode=RangeCode;

          switch outputTypeCode
              case 'F1'
                  s.mode='CV';
                  switch rangeCode
                      case 'R2'
                          s.range = 12E-3;
                      case 'R3'
                          s.range = 120E-3;
                      case 'R4'
                          s.range = 1.2;
                      case 'R5'
                          s.range = 12;
                      case 'R6'
                          s.range = 32;
                      otherwise
                          warning('no valid range code aquired from device');
                  end
              case 'F5'
                  s.mode='CC';
                  switch rangeCode
                      case 'R4'
                          s.range = 1.2E-3;
                      case 'R5'
                          s.range = 12E-3;
                      case 'R6'
                          s.range = 120E-3;
                      otherwise
                          warning('no valid range code aquired from device');
                  end
              otherwise
                  warning('no valid range code aquired from device');
          end

          res = sscanf(data{4},'LV%dLA%d');
          s.limit_V=res(1);
          s.limit_A=res(2);

          s.value=sscanf(data{2}(6:end-1),'%f');

          times=regexp(data{3},'PI([.\d]*)SW([.\d]*)M(\d*)','tokens');
          s.time_interval=str2num(times{1}{1});
          s.time_sweep=str2num(times{1}{2});
          s.run_mode=str2num(times{1}{3});

          obj.UserData.lastStatus=s;
          obj.UserData.valueCache=s.value;
          obj.UserData.valueCacheLastUpdate=tic;
      else
          s=obj.UserData.lastStatus;
      end

  Method goSlowTo
    MCode:
      function goSlowTo(obj,val,time)
      %go slowly to certian value in given time

      if nargin < 3
          time=1;
      end

      if time ~=floor(time)
          time=ceil(time);
          warning('goSlowTo only supports full seconds');
          %this is due to the limitation of time_interval to full seconds
      end

       obj.Sweep.time_interval=time;
       obj.Sweep.time_sweep=time;
       invoke(obj.Sweep,'setSequence',val);
       invoke(obj.Sweep,'step');

Group sweep
  Size: 1
  Mappings ChannelMap Command="sweep1" Index="1"

  Property time_interval
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      d=invoke(obj.Parent,'decodeStatus');
      propertyValue=d.time_interval;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      obj.Parent.UserData.lastStatus.timestamp=0; %reset cache
      g=obj.Parent.Interface;
      fprintf(g,sprintf('PI%1.0f',propertyValue));
    PermissibleType: Double bounded [Max="3600.0" Min="0.1"]
    DefaultValue: 0.1
    ReadOnly: never

  Property time_sweep
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      d=invoke(obj.Parent,'decodeStatus');
      propertyValue=d.time_sweep;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      obj.Parent.UserData.lastStatus.timestamp=0; %reset cache
      g=obj.Parent.Interface;
      fprintf(g,sprintf('SW%1.0f',propertyValue));
    PermissibleType: Double bounded [Max="3600.0" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never

  Method continu
    Type: InstrumentCommand
    Line Command="RU3" Output="false"

  Method halt
    Type: InstrumentCommand
    Line Command="RU0" Output="false"

  Method run
    Type: InstrumentCommand
    Line Command="RU2" Output="false"

  Method setSequence
    MCode:
      function setSequence(obj,val)
      %unfortunately properties have to be scalar. As we want to input an array
      %we have to use a function for this ...

      I=obj.Parent.Interface;

      %use only first 50 values
      if numel(val) > 50
          warning('discarding last %f values in sequence',numel(val)-50);
          val=val(1:50);
      end

      fprintf(I,'PRS');
      for i=1:numel(val)
          fprintf(I,sprintf('%sS%f',obj.Parent.UserData.lastStatus.RangeCode,val(i)));
      end
      fprintf(I,'PRE');

  Method step
    Type: InstrumentCommand
    Line Command="RU1" Output="false"
